 !=== File Automaticaly generated by mxCuBE
   !=== X-Ray data collected at: ID29
   !=== Detector type: PILATUS 6M
   !=== Date: Fri Jun 03 13:24:37 2011
   !=== User comments:

   JOB= !CORRECT !ALL !XYCORR INIT COLSPOT IDXREF DEFPIX XPLAN INTEGRATE CORRECT
   !JOB= DEFPIX XPLAN INTEGRATE CORRECT

   DATA_RANGE= 1 1200
   SPOT_RANGE= 1 20
   SPOT_RANGE= 1 4
   !SPOT_RANGE= 1197 1200
   BACKGROUND_RANGE= 1 4
   !masking non sensitive area of Pilatus
   UNTRUSTED_RECTANGLE= 487  495     0 2528
   UNTRUSTED_RECTANGLE= 981  989     0 2528
   UNTRUSTED_RECTANGLE=1475 1483     0 2528
   UNTRUSTED_RECTANGLE=1969 1977     0 2528
   UNTRUSTED_RECTANGLE=   0 2464   195  213
   UNTRUSTED_RECTANGLE=   0 2464   407  425
   UNTRUSTED_RECTANGLE=   0 2464   619  637
   UNTRUSTED_RECTANGLE=   0 2464   831  849
   UNTRUSTED_RECTANGLE=   0 2464  1043 1061
   UNTRUSTED_RECTANGLE=   0 2464  1255 1273
   UNTRUSTED_RECTANGLE=   0 2464  1467 1485
   UNTRUSTED_RECTANGLE=   0 2464  1679 1697
   UNTRUSTED_RECTANGLE=   0 2464  1891 1909
   UNTRUSTED_RECTANGLE=   0 2464  2103 2121
   UNTRUSTED_RECTANGLE=   0 2464  2315 2333
   TRUSTED_REGION=0.0 1.41 !Relative radii limiting trusted detector region

   !correction tables to compensate the misorientations of the modules
   X-GEO_CORR= /home/tboeglin/Documents/autoproc/summ_test3/process/x_geo_corr.cbf
   Y-GEO_CORR= /home/tboeglin/Documents/autoproc/summ_test3/process/y_geo_corr.cbf

   SECONDS=600
   MINIMUM_NUMBER_OF_PIXELS_IN_A_SPOT= 4
   !STRONG_PIXEL= 3.0

   OSCILLATION_RANGE= 0.100
   STARTING_ANGLE= 102.000
   STARTING_FRAME= 1
   X-RAY_WAVELENGTH=  0.97627
   NAME_TEMPLATE_OF_DATA_FRAMES= /home/tboeglin/Documents/autoproc/summ_test3/tryp01_1_????.cbf !CBF

   !STARTING_ANGLES_OF_SPINDLE_ROTATION= 0 180 10
   !TOTAL_SPINDLE_ROTATION_RANGES= 60 180 10

   DETECTOR_DISTANCE= 359.18
   DETECTOR= PILATUS   MINIMUM_VALID_PIXEL_VALUE= 0   OVERLOAD= 1048500
   SENSOR_THICKNESS=0.32
   ORGX= 1223.05    ORGY= 1256.05
   NX=  2463   NY=  2527   QX= 0.17200   QY= 0.17200
   VALUE_RANGE_FOR_TRUSTED_DETECTOR_PIXELS= 7000 30000

   DIRECTION_OF_DETECTOR_X-AXIS= 1.0 0.0 0.0
   DIRECTION_OF_DETECTOR_Y-AXIS= 0.0 1.0 0.0
   ROTATION_AXIS= 1.0 0.0 0.0
   INCIDENT_BEAM_DIRECTION= 0.0 0.0 1.0
   FRACTION_OF_POLARIZATION= 0.98
   POLARIZATION_PLANE_NORMAL= 0.0 1.0 0.0
   !== Default value recommended
   !AIR= 0.00030489

   SPACE_GROUP_NUMBER= 152
   UNIT_CELL_CONSTANTS= 54.2   54.2  107.0  90.0  90.0 120.0
   INCLUDE_RESOLUTION_RANGE= 50.0 0.0
   !RESOLUTION_SHELLS= 15.0 8.0 4.0 2.8 2.4
   !FRIEDEL'S_LAW= FALSE !default is TRUE

   REFINE(INTEGRATE)= BEAM ORIENTATION CELL
   !== Default value recommended
   !DELPHI= 0.300
   MAXIMUM_NUMBER_OF_PROCESSORS= 16
   !MAXIMUM_NUMBER_OF_JOBS= 16
